# Generated by Configurator on Mon May 11 11:39:37 PDT 2026

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,Oasis,ObjectiveImaging,Oasis
Device,OasisXYStage,ObjectiveImaging,OasisXYStage
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,TL-ApertureDiaphragm,LeicaDMI,TL-ApertureDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,SidePort,LeicaDMI,SidePort
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,TLPolarizer,LeicaDMI,TLPolarizer
Device,Condensor,LeicaDMI,Condensor
Device,Transmitted Light,LeicaDMI,Transmitted Light

# Pre-init settings for devices
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DTR,Disable
Property,COM4,DataBits,8
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Fast USB to Serial,Disable
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Oasis,BoardId,0
Property,Scope,AnswerTimeOut,5000.0000
Property,Scope,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,OasisXYStage,Oasis
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,TL-ApertureDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,SidePort,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,TLPolarizer,Scope
Parent,Condensor,Scope
Parent,Transmitted Light,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Shutter,IL-Shutter
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,5,6-CY5
Label,IL-Turret,4,5-BF
Label,IL-Turret,3,4-TXR
Label,IL-Turret,2,3-CY3
Label,IL-Turret,1,2-FITC
Label,IL-Turret,0,1-DAPI
# ObjectiveTurret
Label,ObjectiveTurret,3,4-20x 0.4na
Label,ObjectiveTurret,2,3-10x 0.45na
Label,ObjectiveTurret,1,2-5x 0.12na
Label,ObjectiveTurret,0,1-2.5x 0.07na
# SidePort
Label,SidePort,1,2
Label,SidePort,0,1
# TLPolarizer
Label,TLPolarizer,0,Out
# Condensor
Label,Condensor,6,7-PH0
Label,Condensor,5,6-PH1
Label,Condensor,4,5-PH2
Label,Condensor,3,4--
Label,Condensor,2,3--
Label,Condensor,1,2--
Label,Condensor,0,1-BFs

# Configuration presets
# Group: TL-Light
# Preset: Startup
ConfigGroup,TL-Light,Startup,Transmitted Light,Level,100


# Group: TL-Ap
# Preset: Startup
ConfigGroup,TL-Ap,Startup,TL-ApertureDiaphragm,Position,20


# Group: Channel
# Preset: CY3
ConfigGroup,Channel,CY3,IL-Turret,Label,3-CY3
ConfigGroup,Channel,CY3,Core,Shutter,IL-Shutter
ConfigGroup,Channel,CY3,IL-Turret,State,2

# Preset: FITC
ConfigGroup,Channel,FITC,IL-Turret,Label,2-FITC
ConfigGroup,Channel,FITC,Core,Shutter,IL-Shutter
ConfigGroup,Channel,FITC,IL-Turret,State,1

# Preset: BF
ConfigGroup,Channel,BF,IL-Turret,Label,5-BF
ConfigGroup,Channel,BF,Core,Shutter,TL-Shutter
ConfigGroup,Channel,BF,Condensor,State,0
ConfigGroup,Channel,BF,Transmitted Light,Control,Computer
ConfigGroup,Channel,BF,Transmitted Light,State,1

# Preset: DAPI
ConfigGroup,Channel,DAPI,IL-Turret,Label,1-DAPI
ConfigGroup,Channel,DAPI,Core,Shutter,IL-Shutter
ConfigGroup,Channel,DAPI,IL-Turret,State,0

# Preset: TXR
ConfigGroup,Channel,TXR,IL-Turret,Label,4-TXR
ConfigGroup,Channel,TXR,Core,Shutter,IL-Shutter
ConfigGroup,Channel,TXR,IL-Turret,State,4

# Preset: CY5
ConfigGroup,Channel,CY5,IL-Turret,Label,6-CY5
ConfigGroup,Channel,CY5,Core,Shutter,IL-Shutter
ConfigGroup,Channel,CY5,IL-Turret,State,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,OasisXYStage,SpeedX_mm_s,25.0000
ConfigGroup,System,Startup,OasisXYStage,SpeedY_mm_s,25.0000
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Exposure,50.0080
ConfigGroup,System,Startup,HamamatsuHam_DCAM,Sensor Cooler,ON
ConfigGroup,System,Startup,ObjectiveTurret,State,1
ConfigGroup,System,Startup,Core,TimeoutMs,50000
ConfigGroup,System,Startup,HamamatsuHam_DCAM,TransposeMirrorX,0


# Group: TL-Field
# Preset: Startup
ConfigGroup,TL-Field,Startup,TL-FieldDiaphragm,Position,40



# PixelSize settings
# Resolution preset: Res3
ConfigPixelSize,Res3,ObjectiveTurret,Label,4-20x 0.4na
ConfigPixelSize,Res3,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Res3,0.325
PixelSizeAffine,Res3,0.325,0.0,0.0,0.0,0.325,0.0
# Resolution preset: Res2
ConfigPixelSize,Res2,ObjectiveTurret,Label,3-10x 0.45na
ConfigPixelSize,Res2,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Res2,0.65
PixelSizeAffine,Res2,0.65,0.0,0.0,0.0,0.65,0.0
# Resolution preset: Res1
ConfigPixelSize,Res1,ObjectiveTurret,Label,2-5x 0.12na
ConfigPixelSize,Res1,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Res1,1.3
PixelSizeAffine,Res1,1.3,0.0,0.0,0.0,1.3,0.0
# Resolution preset: Res0
ConfigPixelSize,Res0,ObjectiveTurret,Label,1-2.5x 0.07na
ConfigPixelSize,Res0,Core,Camera,HamamatsuHam_DCAM
PixelSize_um,Res0,2.6
PixelSizeAffine,Res0,2.6,0.0,0.0,0.0,2.6,0.0

