# Generated by Configurator on Wed Jul 17 10:10:01 PDT 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,TL-ApertureDiaphragm,LeicaDMI,TL-ApertureDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,MagnificationChanger,LeicaDMI,MagnificationChanger
Device,SidePort,LeicaDMI,SidePort
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,XYStage,LeicaDMI,XYStage
Device,TLPolarizer,LeicaDMI,TLPolarizer
Device,DIC Turret,LeicaDMI,DIC Turret
Device,Condensor,LeicaDMI,Condensor
Device,Transmitted Light,LeicaDMI,Transmitted Light
Device,Andor sCMOS Camera,AndorSDK3,Andor sCMOS Camera

# Pre-init settings for devices
Property,Scope,AnswerTimeOut,5000.0000
Property,Scope,Port,COM3

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,5000.0000
Property,COM3,BaudRate,19200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,TL-ApertureDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,MagnificationChanger,Scope
Parent,SidePort,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,XYStage,Scope
Parent,TLPolarizer,Scope
Parent,DIC Turret,Scope
Parent,Condensor,Scope
Parent,Transmitted Light,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Camera,Andor sCMOS Camera
Property,Core,Shutter,IL-Shutter
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,5,6-DAPI
Label,IL-Turret,4,5-EMP
Label,IL-Turret,3,4-CY5
Label,IL-Turret,2,3-TXR
Label,IL-Turret,1,2-CIT
Label,IL-Turret,0,1-GFP
# ObjectiveTurret
Label,ObjectiveTurret,5,6-5x 0.12na
Label,ObjectiveTurret,4,5-2.5x 0.07na
Label,ObjectiveTurret,3,4-0x 0na
Label,ObjectiveTurret,2,3-20x 0.4na
Label,ObjectiveTurret,1,2-10x 0.45na
Label,ObjectiveTurret,0,1-4x 0.1na
# SidePort
Label,SidePort,2,3
Label,SidePort,1,2
Label,SidePort,0,1
# TLPolarizer
Label,TLPolarizer,0,Out
# DIC Turret
Label,DIC Turret,3,4--
Label,DIC Turret,2,3--
Label,DIC Turret,1,2--
Label,DIC Turret,0,1--
# Condensor
Label,Condensor,6,7-PH0
Label,Condensor,5,6-PH2
Label,Condensor,4,5-PH1
Label,Condensor,3,4--
Label,Condensor,2,3--
Label,Condensor,1,2--
Label,Condensor,0,1-BF

# Configuration presets
# Group: Channel
# Preset: GFP
ConfigGroup,Channel,GFP,IL-Turret,Label,1-GFP
ConfigGroup,Channel,GFP,Core,Shutter,IL-Shutter
ConfigGroup,Channel,GFP,IL-Turret,State,0

# Preset: CIT
ConfigGroup,Channel,CIT,IL-Turret,Label,2-CIT
ConfigGroup,Channel,CIT,Core,Shutter,IL-Shutter
ConfigGroup,Channel,CIT,IL-Turret,State,1

# Preset: TXR
ConfigGroup,Channel,TXR,IL-Turret,Label,3-TXR
ConfigGroup,Channel,TXR,Core,Shutter,IL-Shutter
ConfigGroup,Channel,TXR,IL-Turret,State,2

# Preset: CY5
ConfigGroup,Channel,CY5,IL-Turret,Label,4-CY5
ConfigGroup,Channel,CY5,Core,Shutter,IL-Shutter
ConfigGroup,Channel,CY5,IL-Turret,State,3

# Preset: BF
ConfigGroup,Channel,BF,IL-Turret,Label,5-EMP
ConfigGroup,Channel,BF,Core,Shutter,TL-Shutter
ConfigGroup,Channel,BF,Condensor,State,0
ConfigGroup,Channel,BF,Transmitted Light,Control,Computer
ConfigGroup,Channel,BF,Transmitted Light,State,1

# Preset: DAPI
ConfigGroup,Channel,DAPI,IL-Turret,Label,6-DAPI
ConfigGroup,Channel,DAPI,Core,Shutter,IL-Shutter
ConfigGroup,Channel,DAPI,IL-Turret,State,0

# Group: TL-Field 
# Preset: Startup
ConfigGroup,TL-Field,Startup,TL-FieldDiaphragm,Position,40

# Group: TL-Ap 
# Preset: Startup
ConfigGroup,TL-Ap,Startup,TL-ApertureDiaphragm,Position,20

# Group: TL-Light 
# Preset: Startup
ConfigGroup,TL-Light,Startup,Transmitted Light,Level,100

# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Core,TimeoutMs,50000
ConfigGroup,System,Startup,ObjectiveTurret,State,4
ConfigGroup,System,Startup,Andor sCMOS Camera,Exposure,50
ConfigGroup,System,Startup,Andor sCMOS Camera,SensorCooling,On
ConfigGroup,System,Startup,XYStage,Acceleration,800
ConfigGroup,System,Startup,XYStage,Speed,27467476
ConfigGroup,System,Startup,Core,XYStage,XYStage

# PixelSize settings
#Resolution preset: Res0
ConfigPixelSize,Res0,ObjectiveTurret,Label,5-2.5x 0.07na
ConfigPixelSize,Res0,Core,Camera,Andor sCMOS Camera
PixelSize_um,Res0,2.6
PixelSizeAffine,Res0,2.6,0.0,0.0,0.0,2.6,0.0

# Resolution preset: Res1
ConfigPixelSize,Res1,ObjectiveTurret,Label,6-5x 0.12na
ConfigPixelSize,Res1,Core,Camera,Andor sCMOS Camera
PixelSize_um,Res1,1.3
PixelSizeAffine,Res1,1.3,0.0,0.0,0.0,1.3,0.0

# Resolution preset: Res2
ConfigPixelSize,Res2,ObjectiveTurret,Label,2-10x 0.45na
ConfigPixelSize,Res2,Core,Camera,Andor sCMOS Camera
PixelSize_um,Res2,0.65
PixelSizeAffine,Res2,0.65,0.0,0.0,0.0,0.65,0.0

# Resolution preset: Res3
ConfigPixelSize,Res3,ObjectiveTurret,Label,3-20x 0.4na
ConfigPixelSize,Res3,Core,Camera,Andor sCMOS Camera
PixelSize_um,Res3,0.325
PixelSizeAffine,Res3,0.325,0.0,0.0,0.0,0.325,0.0

# Resolution preset: Res4
ConfigPixelSize,Res4,ObjectiveTurret,Label,1-4x 0.1na
ConfigPixelSize,Res4,Core,Camera,Andor sCMOS Camera
PixelSize_um,Res4,1.625
PixelSizeAffine,Res4,1.625,0.0,0.0,0.0,1.625,0.0
