# Generated by Configurator on Thu Feb 22 10:05:50 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,COM3,SerialManager,COM3
Device,Andor Zyla 4.2 sCMOS Camera,AndorSDK3,Andor sCMOS Camera
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,TL-ApertureDiaphragm,LeicaDMI,TL-ApertureDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,MagnificationChanger,LeicaDMI,MagnificationChanger
Device,SidePort,LeicaDMI,SidePort
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,XYStage,LeicaDMI,XYStage
Device,TLPolarizer,LeicaDMI,TLPolarizer
Device,DIC Turret,LeicaDMI,DIC Turret
Device,Condensor,LeicaDMI,Condensor
Device,Transmitted Light,LeicaDMI,Transmitted Light

# Pre-init settings for devices
Property,Scope,AnswerTimeOut,5000.0000
Property,Scope,Port,COM3

# Pre-init settings for COM ports
Property,COM3,AnswerTimeout,500.0000
Property,COM3,BaudRate,19200
Property,COM3,DTR,Disable
Property,COM3,DataBits,8
Property,COM3,DelayBetweenCharsMs,0.0000
Property,COM3,Fast USB to Serial,Disable
Property,COM3,Handshaking,Off
Property,COM3,Parity,None
Property,COM3,StopBits,1
Property,COM3,Verbose,1

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,TL-ApertureDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,MagnificationChanger,Scope
Parent,SidePort,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,XYStage,Scope
Parent,TLPolarizer,Scope
Parent,DIC Turret,Scope
Parent,Condensor,Scope
Parent,Transmitted Light,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,FocusDrive,0

# Roles
Property,Core,Camera,Andor Zyla 4.2 sCMOS Camera
Property,Core,Shutter,TL-Shutter
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,5,6--
Label,IL-Turret,4,5--
Label,IL-Turret,3,4-EMP
Label,IL-Turret,2,3-TX2
Label,IL-Turret,1,2-GFP
Label,IL-Turret,0,1-DAP
# ObjectiveTurret
Label,ObjectiveTurret,5,6-5x 0.12na
Label,ObjectiveTurret,4,5-2x 0.07na
Label,ObjectiveTurret,3,4-0x 0na
Label,ObjectiveTurret,2,3-20x 0.4na
Label,ObjectiveTurret,1,2-10x 0.3na
Label,ObjectiveTurret,0,1-4x 0.1na
# SidePort
Label,SidePort,2,3
Label,SidePort,1,2
Label,SidePort,0,1
# TLPolarizer
Label,TLPolarizer,0,Out
# DIC Turret
Label,DIC Turret,3,4--
Label,DIC Turret,2,3--
Label,DIC Turret,1,2--
Label,DIC Turret,0,1--
# Condensor
Label,Condensor,6,7-PH0
Label,Condensor,5,6-PH2
Label,Condensor,4,5-PH1
Label,Condensor,3,4--
Label,Condensor,2,3--
Label,Condensor,1,2--
Label,Condensor,0,1-BF

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

